PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = Attitudes about food products
  keyboardBackend = ioHub
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Routines
  Routine similarity_trial
    TextComponent similarity_trial_question
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = Which of the two plant-based steaks is MORE SIMILAR to a prototypical BEEF STEAK?
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    CodeComponent similarity_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        # index
        stimulus_index_similarity = 0
      Begin Routine:
        if attention_checks_failed == 2:
            continueRoutine = False

        # start characteristics for choice square
        # once a choice is given, square turns blue and surrounds chosen image
        border_color = "white"
        choice_position = reference_image_position
        similarity_trial_highlighted_choice.fillColor = None

        # aligning text to the left
        similarity_trial_missed_trial_text.alignHoriz = "left"

        # setting images for this trial
        similarity_trial_left_img = experimental_path + str(experimental_stimuli[stimulus_index_similarity][0])
        similarity_trial_right_img = experimental_path + str(experimental_stimuli[stimulus_index_similarity][1])

        # recording response time
        response_time = None
      Each Frame:
        # start characteristics for choice square
        # once a choice is given, square turns blue and surrounds chosen image
        if similarity_trial_choice.keys:
            if similarity_trial_choice.keys[0] == "d":
                border_color = "blue"
                choice_position = similarity_left_image_position

            elif similarity_trial_choice.keys[0] == "k":
                border_color = "blue"
                choice_position = similarity_right_image_position

        # Check if a key was pressed and record time
        if similarity_trial_choice.keys and response_time is None:
            response_time = t  # `t` is the current time in the routine

        # Check if 1 second has passed since response
        if response_time is not None and t - response_time >= 0.5:
            border_color = "white"
            continueRoutine = False
      End Routine:
        #Data logging
        # if response is not given, record as missed trial
        if similarity_trial_choice.keys == "":
            trial_type = "similarity-missed"

        else:
            trial_type = "similarity"

        thisExp.addData("Trial Type", trial_type)
        thisExp.addData("Left Image", experimental_stimuli[stimulus_index_similarity][0])
        thisExp.addData("Right Image", experimental_stimuli[stimulus_index_similarity][1])

        # move onto next trial
        if similarity_trial_choice or similarity_trial_end_missed_trial:
            stimulus_index_similarity += 1
    ImageComponent similarity_trial_left_image
      image [set every repeat] = $similarity_trial_left_img
      pos = similarity_left_image_position
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
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    ImageComponent similarity_trial_right_image
      image [set every repeat] = $similarity_trial_right_img
      pos = similarity_right_image_position
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
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    KeyboardComponent similarity_trial_choice
      allowedKeys = 'd','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4.0
      store = first key
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    TextComponent similarity_trial_steak_A_title
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (-0.25, -0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = PLANT-BASED STEAK A
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    TextComponent similarity_trial_steak_B_title
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (0.25, -0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = PLANT-BASED STEAK B
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    TextComponent similarity_trial_missed_trial_text
      color = black
      font = Times New Roman
      letterHeight = 0.025
      startVal [time (s)] = 4.25
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      text:
        You have not yet responsed, we really care about your response!



        Reminder: press "k" if the right plant-based steak is MORE SIMILAR to a prototypical BEEF STEAK, or "d" if the left plant-based steak is.
    PolygonComponent similarity_trial_highlighted_choice
      lineColor [set every frame] = $border_color
      lineWidth = 3
      pos [set every frame] = choice_position
      shape = rectangle
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4.0
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    KeyboardComponent similarity_trial_end_missed_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.25
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    TextComponent similarity_reference_title
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = BEEF STEAK
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    ImageComponent similarity_trial_reference_image
      image [set every repeat] = images/trials/reference/referent.png
      pos = reference_image_position
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent similarity_trial_missed_trial_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 4.25
      text = Press SPACE to continue
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  Routine liking_trial
    TextComponent liking_trial_question
      color = black
      font = Times New Roman
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = Which of the two plant-based steaks do you LIKE MORE?
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    CodeComponent liking_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        # index
        stimulus_index_liking = 0
      Begin Routine:
        # start characteristics for choice square
        # once a choice is given, square turns blue and surrounds chosen image
        border_color = "white"
        choice_position = [0,-1]
        liking_trial_highlighted_choice.fillColor = None

        # aligning text to the left
        liking_trial_missed_trial_text.alignText = "left"

        # setting images for this trial
        liking_trial_left_img = experimental_path + experimental_stimuli[stimulus_index_liking][0]
        liking_trial_right_img = experimental_path + experimental_stimuli[stimulus_index_liking][1]

        # recording response time
        response_time = None
      Each Frame:
        # start characteristics for choice square
        # once a choice is given, square turns blue and surrounds chosen image
        if liking_trial_choice.keys:
            if liking_trial_choice.keys[0] == "d":
                border_color = "blue"
                choice_position = left_image_position

            elif liking_trial_choice.keys[0] == "k":
                border_color = "blue"
                choice_position = right_image_position

        # Check if a key was pressed and record time
        if liking_trial_choice.keys and response_time is None:
            response_time = t  # `t` is the current time in the routine

        # Check if 1 second has passed since response
        if response_time is not None and t - response_time >= 0.5:
            border_color = "white"
            continueRoutine = False
      End Routine:
        #Data logging
        # if response is not given, record as missed trial
        if liking_trial_choice.keys == "":
            trial_type = "liking-missed"

        else:
            trial_type = "liking"

        thisExp.addData("Trial Type", trial_type)
        thisExp.addData("Left Image", experimental_stimuli[stimulus_index_liking][0])
        thisExp.addData("Right Image", experimental_stimuli[stimulus_index_liking][1])

        # move onto next pair
        if liking_trial_choice or liking_trial_end_missed_trial:
            stimulus_index_liking += 1
    ImageComponent liking_trial_left_image
      image [set every repeat] = $liking_trial_left_img
      pos = left_image_position
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
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    ImageComponent liking_trial_right_image
      image [set every repeat] = $liking_trial_right_img
      pos = right_image_position
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
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    KeyboardComponent liking_trial_choice
      allowedKeys = 'd','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
      store = first key
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    TextComponent liking_trial_steak_A_title
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (-0.25, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = PLANT-BASED STEAK A
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    TextComponent liking_trial_steak_B_title
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (0.25, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = PLANT-BASED STEAK B
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    TextComponent liking_trial_missed_trial_text
      color = black
      font = Times New Roman
      letterHeight = 0.025
      startVal [time (s)] = 4.25
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      text:
        You have not yet responsed, we really care about your response!



        Reminder: press "k" if you LIKE the right plant-based steak more, or "d" if you LIKE the left plant-based steak more.
    PolygonComponent liking_trial_highlighted_choice
      lineColor [set every frame] = $border_color
      lineWidth = 3
      pos [set every frame] = choice_position
      shape = rectangle
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4.0
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    KeyboardComponent liking_trial_end_missed_trial_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.25
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    TextComponent liking_trial_missed_trial_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 4.25
      text = Press SPACE to continue
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  Routine routine_5_trial_instructions_sim
    KeyboardComponent key_resp_consent_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent informed_consent_text_2
      color = black
      font = Times New Roman
      letterHeight = text_size
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        By proceeding with the experiment, you agree that you have read and understood the consent form on the previous page.

        If you do not wish to participate, you can leave the cubicle now. You will not receive any compensation.
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        informed_consent_text.alignText = "left"
    TextComponent press_space_informed_consent_2
      color = black
      font = Times New Roman
      letterHeight = text_size
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine routine_3_pre_instructions
    KeyboardComponent key_resp_pre_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent pre_instructions_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    ImageComponent pre_instructions_text
      image = texts/3_pre_instructions.png
      pos = (0, 0.1)
      saveStartStop = False
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
      units = height
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  Routine routine_4_practice_aftermath
    TextComponent practice_aftermath_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent practice_aftermath_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent practice_aftermath_code
      Code Type = Auto->JS
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      Begin Routine:
        # aligning text to the left
        practice_aftermath_text.alignText = "left"
    ImageComponent practice_aftermath_text
      image = texts/4_practice_aftermath.png
      pos = (0, 0.1)
      saveStartStop = False
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
      units = height
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  Routine routine_0_experiment_info
    ImageComponent experiment_info_text
      image = texts/0_experiment_info.png
      saveStartStop = False
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent experiment_info_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent experiment_info_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    CodeComponent experiment_info_code
      Code Type = Auto->JS
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      Before Experiment:
        # === SET UP STIMULI CHARACTERISTICS ===

        image_size = [0.3,0.3]
        left_image_position = [-0.25, 0]
        right_image_position = [0.25, 0]

        similarity_left_image_position = [-0.25, -0.25]
        similarity_right_image_position = [0.25, -0.25]
        reference_image_position = [0, 0.15]

        choice_position = [0,-1]
        border_color = "white"

        # === FUNCTION TO GENERATE PAIRS ===

        def generate_pairs(items):
            pairs = []
            for i in range(len(items)):
                for j in range(i + 1, len(items)):
                    pairs.append([items[i], items[j]])
            return pairs

        # === SETTING UP PRACTICE TRIALS ===

        # identify list of practice stimuli
        practice_path = str("images/practice/comparison/")

        # create list of practice stimuli
        # === CHANGE PATH HERE ===
        # enter directory where your practice stimuli are located
        practice_stimuli = [s for s in os.listdir('/Users/mohammadhamdan/Documents/GitHub/Comparative_Judgement/images/practice/comparison') if s.endswith('.png')]

        # create all pairs
        practice_stimuli = generate_pairs(practice_stimuli)

        # shuffle within pairs (so that the same pictures are not more likely to be presented on the same side)
        for pair in range(0,len(practice_stimuli)):
            shuffle(practice_stimuli[pair])

        # shuffle order
        shuffle(practice_stimuli[pair])

        # how many trials
        length_of_practice_trials = len(practice_stimuli)

        # === SETTING UP EXPERIMENTAL TRIALS ===
        # identify path
        experimental_path = str("images/trials/comparison/")

        # === CHANGE PATH HERE ===
        # enter directory where your experimental stimuli are located
        experimental_stimuli = [s for s in os.listdir('/Users/mohammadhamdan/Documents/GitHub/Comparative_Judgement/images/trials/comparison') if s.endswith('.png')]

        # create all pairs
        experimental_stimuli = generate_pairs(experimental_stimuli)

        # shuffle order
        shuffle(experimental_stimuli)

        # shuffle within pairs (so that the same pictures are not more likely to be presented on the same side)
        for pair in range(0,len(experimental_stimuli)):
            shuffle(experimental_stimuli[pair])

        # how many trials
        length_of_experimental_trials = len(experimental_stimuli)

        # === ATTENTION CHECKS ===
        attention_checks_failed = 0

        #random stimuli for attention checks
        # === CHANGE PATH HERE ===
        options = [s for s in os.listdir('/Users/mohammadhamdan/Documents/GitHub/Comparative_Judgement/images/trials/comparison') if s.endswith('.png')]
        practice_attention_random_choice = np.random.choice(options)
        practice_attention_check_image = 'images/practice/comparison/' + practice_attention_random_choice

        # === CHANGE PATH HERE ===
        options = [s for s in os.listdir('/Users/mohammadhamdan/Documents/GitHub/Comparative_Judgement/images/trials/comparison') if s.endswith('.png')]
        liking_attention_random_choice = np.random.choice(options)
        liking_attention_check_image = 'images/trials/comparison/' + liking_attention_random_choice

        # === DIET ===
        # only flexitarians and omnivores were shown the red meat question, so if
        # one of those was answered in the diet question,
        # this value changes to true
        omniflex = False
      End Routine:
        # recording screen size
        thisExp.addData('screen_size', win.size)
  Routine routine_1_informed_consent
    KeyboardComponent informed_conset_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent informed_consent_text
      color = black
      font = Times New Roman
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        By proceeding with the experiment, you agree that you have read and understood the consent form on the previous page.

        If you do not wish to participate, you can press ESC twice to exit and return the study on Connect Research.
    CodeComponent informed_consent_code
      Code Type = Auto->JS
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      Begin Routine:
        # aligning text to the left
        informed_consent_text.alignHoriz = "left"
    TextComponent informed_consent_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine routine_4_practice_instructions
    ImageComponent practice_instructions_image
      image = texts/4_practice_instructions.png
      saveStartStop = False
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_instructions_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent practice_instructions_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine routine_6_liking_instructions
    KeyboardComponent liking_instructions_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liking_instructions_code
      Code Type = Auto->JS
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      Begin Experiment:
        # identify list of instructions png files
        liking_instructions = ["6_trial_instructions_liking.png", "6_trial_instructions_liking_visual.png"]

        # index
        liking_instructions_index = 0
      Begin Routine:
        liking_instructions_img = "texts/" + str(liking_instructions[liking_instructions_index])

        if liking_instructions_space:
            liking_instructions_index += 1
    ImageComponent liking_instructions_image
      image [set every repeat] = $liking_instructions_img
      saveStartStop = False
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
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    TextComponent liking_instructions_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine routine_6_similarity_instructions
    KeyboardComponent similarity_instructions_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent similarity_instructions_code
      Code Type = Auto->JS
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      Begin Experiment:
        # identify list of instructions png files
        similarity_instructions = ["5_liking_aftermath.png", "5_trial_instructions_sim.png", "5_trial_instructions_sim_visual.png"]

        # index
        similarity_instructions_index = 0
      Begin Routine:
        if attention_checks_failed == 2:
            continueRoutine = False

        similarity_instructions_img = "texts/" + str(similarity_instructions[similarity_instructions_index])

        if similarity_instructions_space:
            similarity_instructions_index += 1
    ImageComponent similarity_instructions_image
      image [set every repeat] = $similarity_instructions_img
      saveStartStop = False
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
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    TextComponent similarity_instructions_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine end
    TextComponent end_text
      color = black
      font = Times New Roman
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Thank you for your participation!
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    KeyboardComponent end_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      store = nothing
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    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        if attention_checks_failed == 2:
            continueRoutine = False

        #end_text.alignHoriz = "left"
  Routine age_question
    TextComponent age_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = What is your age?
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    TextboxComponent age_response
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent age_key_resp
      allowedKeys = 'return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent age_press_enter_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue
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    CodeComponent age_question_code
      Code Type = Auto->JS
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      Begin Routine:
        if attention_checks_failed == 2:
            continueRoutine = False

        # only allowing answers from an accepted list
        age_correctKeys = [f"{i}" for i in range(0, 100)]
      Each Frame:
        # what keys have been pressed this frame?
        keys = age_response.text

        # if any, check that they're the right keys
        if keys:
            if keys not in age_correctKeys:
                # if they're not valid, remove the last inputted character from the textbox
                age_response.text = age_response.text[0:-1]
            if len(keys) > 2:
                age_response.text = age_response.text[0:-1]

        # if an acceptable answer is given AND return is pressed, continue to next question
        if age_key_resp.keys == "return" and keys in age_correctKeys:
            continueRoutine = False
  Routine diet_question
    CodeComponent diet_code
      Code Type = Auto->JS
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      Begin Routine:
        # aligning text to the left
        diet_options.alignText = "left"

        # only allowing answers from an accepted list
        diet_correctKeys = [f"{i}" for i in range(0, 7)]
      Each Frame:
        # what keys have been pressed this frame?
        keys = diet_response.text

        # if any, check that they're the right keys
        if keys:
            if keys not in diet_correctKeys:
                # if they're not valid, remove the last inputted character from the textbox
                diet_response.text = diet_response.text[0:-1]

        # if an acceptable answer is given AND return is pressed, continue to next question
        if diet_key_resp.keys == "return" and keys in diet_correctKeys:
            continueRoutine = False
      End Routine:
        if keys[-1] in ["1", "3"]: # omnivore or flexitarian; for red meat question
            omniflex = True
    TextComponent diet_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = How would you describe your diet?
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    TextComponent diet_options
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. Omnivore (I eat meat, fish and/or dairy daily/almost daily)

        2. Pescatarian (I eat fish and diary, but not meat)

        3. Flexitarian (I eat meat and fish occasionally, but I also eat vegetarian)

        4. Vegetarian (I do not eat meat nor fish, but I eat dairy products)

        5. Vegan (I do not eat meat, fish nor dairy products)

        6. Other

        Please type the number in the box below.
    TextboxComponent diet_response
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent diet_key_resp
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent diet_press_enter_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue
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  Routine gender_question
    CodeComponent gender_code
      Code Type = Auto->JS
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      Begin Routine:
        if attention_checks_failed == 2:
            continueRoutine = False

        # aligning text to the left
        gender_options.alignText = "left"

        # only allowing answers from an accepted list
        gender_correctKeys = [f"{i}" for i in range(0, 5)]
      Each Frame:
        # what keys have been pressed this frame?
        keys = gender_response.text

        # if any, check that they're the right keys
        if keys:
            if keys not in gender_correctKeys:
                # if they're not valid, remove the last inputted character from the textbox
                gender_response.text = gender_response.text[0:-1]

        # if an acceptable answer is given AND return is pressed, continue to next question
        if gender_key_resp.keys == "return" and keys in gender_correctKeys:
            continueRoutine = False
    TextComponent gender_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = What is your gender?
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    TextComponent gender_options
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. Male

        2. Female

        3. Non-binary

        4. Prefer not to say


        Please type the number in the box below.
    TextboxComponent gender_response
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent gender_key_resp
      allowedKeys = 'return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent gender_press_enter_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue
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  Routine frequency_question
    CodeComponent frequency_code
      Code Type = Auto->JS
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      Begin Routine:
        if attention_checks_failed == 2:
            continueRoutine = False

        # aligning text to the left
        frequency_options.alignText = "left"

        # only allowing answers from an accepted list
        frequency_correctKeys = [f"{i}" for i in range(0, 7)]
      Each Frame:
        # what keys have been pressed this frame?
        keys = frequency_response.text

        # if any, check that they're the right keys
        if keys:
            if keys not in frequency_correctKeys:
                # if they're not valid, remove the last inputted character from the textbox
                frequency_response.text = frequency_response.text[0:-1]

        # if an acceptable answer is given AND return is pressed, continue to next question
        if frequency_key_resp.keys == "return" and keys in frequency_correctKeys:
            continueRoutine = False
    TextComponent frequency_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = How often do you eat plant-based meat alternatives?
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    TextComponent frequency_options
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. Never

        2. Once every three months

        3. Once a month

        4. Once a week

        5. A couple of times per week

        6. Every day

        Please type the number in the box below.
    TextboxComponent frequency_response
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent frequency_key_resp
      allowedKeys = 'return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent frequency_press_enter_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue
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  Routine nationality_question
    TextComponent nationality_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = What is your nationality?
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    TextboxComponent nationality_response
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent nationality_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent nationality_press_enter_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue
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  Routine feedback_question
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if attention_checks_failed == 2:
            continueRoutine = False

        # aligning text to the left
        frequency_prompt.alignText = "left"
    TextComponent feedback_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.035
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Thank you, the study is almost over. Do you have any feedback for us?
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    TextboxComponent feedback_response
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.2)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent feedback_key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent feedback_press_enter_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press THE RIGHT ARROW KEY to continue
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  Routine practice_trial
    TextComponent practice_trial_question
      color = black
      font = Times New Roman
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = Which of the two citrus fruits do you LIKE MORE?
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    CodeComponent practice_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        # index
        practice_index = 0
      Begin Routine:
        # start characteristics for choice square
        # once a choice is given, square turns blue and surrounds chosen image
        choice_position = [0,-1]
        border_color = "white"
        practice_trial_highlighted_choice.fillColor = None

        # aligning text to the left
        practice_trial_missed_trial_text.alignText = "left"

        # setting images for this trial
        practice_trial_left_img = practice_path + practice_stimuli[practice_index][0]
        practice_trial_right_img = practice_path + practice_stimuli[practice_index][1]

        # recording response time
        response_time = None
      Each Frame:
        # setting where choice square should move to
        if practice_trial_choice.keys:
            if practice_trial_choice.keys[0] == "d":
                border_color = "blue"
                choice_position = left_image_position

            elif practice_trial_choice.keys[0] == "k":
                border_color = "blue"
                choice_position = right_image_position

        # Check if a key was pressed and record time
        if practice_trial_choice.keys and response_time is None:
            response_time = t  # `t` is the current time in the routine

        # Check if 1 second has passed since response
        if response_time is not None and t - response_time >= 0.5:
            border_color = "white"
            continueRoutine = False
      End Routine:
        #Data logging
        # if response is not given, record as missed trial
        if practice_trial_choice.keys == "":
            trial_type = "practice-missed"

        else:
            trial_type = "practice"

        thisExp.addData("Trial Type", trial_type)
        thisExp.addData("Left Image", practice_stimuli[practice_index][0])
        thisExp.addData("Right Image", practice_stimuli[practice_index][1])

        # move onto next pair
        if practice_trial_choice or practice_trial_end_missed_trial:
            practice_index += 1
    ImageComponent practice_trial_left_image
      image [set every repeat] = $practice_trial_left_img
      pos = left_image_position
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
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    ImageComponent practice_trial_right_image
      image [set every repeat] = $practice_trial_right_img
      pos = right_image_position
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
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    KeyboardComponent practice_trial_choice
      allowedKeys = 'd','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
      store = first key
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    TextComponent practice_trial_fruit_A
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (-0.25, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.25
      text = CITRUS FRUIT A
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    TextComponent practice_trial_fruit_B
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (0.25, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.25
      text = CITRUS FRUIT B
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    PolygonComponent practice_trial_highlighted_choice
      lineColor [set every frame] = $border_color
      lineWidth = 3
      pos [set every frame] = choice_position
      shape = rectangle
      size = image_size
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 4
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    TextComponent practice_trial_missed_trial_text
      color = black
      font = Times New Roman
      letterHeight = 0.025
      startVal [time (s)] = 4.25
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      text:
        You have not yet responsed, we really care about your response!



        Reminder: press "k" if you LIKE the right plant-based steak more, or "d" if you LIKE the left plant-based steak more.
    KeyboardComponent practice_trial_end_missed_trial_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.25
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    TextComponent practice_trial_missed_trial_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 4.25
      text = Press SPACE to continue
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  Routine routine_0_experiment_conditions
    ImageComponent experiment_conditions_text
      image = texts/0_experiment_conditions.png
      saveStartStop = False
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent experiment_conditions_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent experiment_conditions_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine attention_check_failed
    TextComponent attention_check_failed_text
      color = black
      font = Times New Roman
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for your time.

        Unfortunately, you failed both of our attention checks.

        Please press ENTER to return to the study in Connect.
    KeyboardComponent attention_check_failed_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = nothing
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    CodeComponent attention_check_failed_code
      Code Type = Both
      Begin JS Routine:
        if ((abort === true)) {
            continueRoutine = false;
        } else {
            if ((attention_checks_failed === 2)) {
                continueRoutine = true;
                psychoJS.quit({isCompleted: false});
            } else {
                if ((attention_checks_failed < 2)) {
                    continueRoutine = false;
                }
            }
        }
      Begin Routine:
        if attention_checks_failed == 2:
            continueRoutine = True
            #alert('Unfortunately, you failed both of our attention checks. Please press OK to be redirected to the study in Connect.')
            quitPsychoJS()

        elif attention_checks_failed < 2:
            continueRoutine = False
      Each JS Frame:
        exit_full_screen();
  Routine additional_diet_question
    CodeComponent additional_diet_code
      Code Type = Auto->JS
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      Begin Routine:
        # aligning text to the left
        additional_diet_options.alignText = "left"

        # only allowing answers from an accepted list
        additional_diet_correctKeys = [f"{i}" for i in range(0, 7)]
      Each Frame:
        # what keys have been pressed this frame?
        keys = additional_diet_response.text

        # if any, check that they're the right keys
        if keys:
            if keys not in additional_diet_correctKeys:
                # if they're not valid, remove the last inputted character from the textbox
                additional_diet_response.text = additional_diet_response.text[0:-1]

        # if an acceptable answer is given AND return is pressed, continue to next question
        if additional_diet_key_resp.keys == "return" and keys in additional_diet_correctKeys:
            continueRoutine = False
    TextComponent additional_diet_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = How long have you been following this diet?
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    TextComponent additional_diet_options
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. Less than a year

        2. Within the last 1-3 years

        3. Within the last 3 and 5 years

        4. Within the last 5 and 10 years

        5. For over 10 years

        6. I've always followed this diet

        Please type the number in the box below.
    TextboxComponent additional_diet_response
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent additional_diet_key_resp
      allowedKeys = 'return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent additional_diet_press_enter_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue
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  Routine red_meat_question
    CodeComponent red_meat_code
      Code Type = Auto->JS
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      Begin Routine:
        #aligning text to the left
        red_meat_options.alignText = "left"

        # only allowing answers from an accepted list
        red_meat_correctKeys = list(["1", "2"])
      Each Frame:
        # what keys have been pressed this frame?
        keys = red_meat_response.text

        # if any, check that they're the right keys
        if keys:
            if keys not in red_meat_correctKeys:
                # if they're not valid, remove the last inputted character from the textbox
                red_meat_response.text = red_meat_response.text[0:-1]

        # if an acceptable answer is given AND return is pressed, continue to next question
        if red_meat_key_resp.keys == "return" and keys in red_meat_correctKeys:
            continueRoutine = False
    TextComponent red_meat_prompt
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Do you eat red meat (beef, veal, pork and/or lamb)?
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    TextComponent red_meat_options
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. Yes

        2. No

        Please type the number in the box below.
    TextboxComponent red_meat_response
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent red_meat_key_resp
      allowedKeys = 'return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent red_meat_press_enter_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to continue
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  Routine exited_full_screen
    TextComponent exited_full_screen_text
      color = black
      font = Times New Roman
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for your time.

        Unfortunately, you exited full screen mode and your participation in the experiment is over. You will therefore not be compensated.

        Please press ENTER to return to the study in Connect.
    KeyboardComponent attention_check_failed_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = nothing
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    CodeComponent attention_check_failed_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if attention_checks_failed < 2:
            continueRoutine = False

        if abort == True:
            continueRoutine = False

        if full_screen == False:
            continueRoutine = False
  Routine practice_trial_attention_check
    TextComponent practice_trial_attention_check_question
      color = black
      font = Times New Roman
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = This is an attention check. Press Q on your keyboard to continue
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    CodeComponent practice_trial_attention_check_code
      Code Type = Auto->JS
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      Begin Routine:
        # recording response time
        response_time = None

        # check is not failed
        this_check_failed = False
      Each Frame:
        # Check if a key was pressed and record time
        if practice_trial_attention_check_choice.keys and response_time is None:
            response_time = t  # `t` is the current time in the routine

        # Check if 1 second has passed since response
        if practice_trial_attention_check_choice.keys:
            #if practice_trial_attention_check_choice.keys[0] == "q":
            if response_time is not None and t - response_time >= 1:
                continueRoutine = False
      End Routine:
        #Data logging

        thisExp.addData("Left Image", practice_attention_random_choice)
        thisExp.addData("Right Image", practice_attention_random_choice)
        thisExp.addData("Trial Type", "attention-check")

        #if continueRoutine == True:
        if practice_trial_attention_check_choice.keys:
            if practice_trial_attention_check_choice.keys[0] != "q":
                # this is a practice attention check, so even if missed, does not count
                #attention_checks_failed += 1
                this_check_failed = True

        #else:
        #    attention_checks_failed += 1

        thisExp.addData("checks failed", attention_checks_failed)
        thisExp.addData("this check failed", this_check_failed)
    ImageComponent practice_trial_attention_check_left_image
      image [set every repeat] = $practice_attention_check_image
      pos = left_image_position
      size = image_size
      startVal [time (s)] = 0.25
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    ImageComponent practice_trial_attention_check_right_image
      image [set every repeat] = $practice_attention_check_image
      pos = right_image_position
      size = image_size
      startVal [time (s)] = 0.25
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    KeyboardComponent practice_trial_attention_check_choice
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      store = all keys
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    TextComponent practice_trial_attention_check_fruit_A
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (-0.25, 0.2)
      startVal [time (s)] = 0
      text = CITRUS FRUIT A
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    TextComponent practice_trial_attention_check_fruit_B
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (0.25, 0.2)
      startVal [time (s)] = 0
      text = CITRUS FRUIT B
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  Routine failed_attention_check
    CodeComponent missed_attention_check_code
      Code Type = Auto->JS
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      Begin Routine:
        # show this screen only if attention check was failed
        if this_check_failed == False:
            continueRoutine = False

        elif this_check_failed == True and attention_checks_failed > 1:
            continueRoutine = False

        # aligning text to the left
        missed_attention_check_text.alignText = "left"

        # recording response time
        response_time = None
      End Routine:
        #Data logging
        thisExp.addData("checks failed", attention_checks_failed)
    TextComponent missed_attention_check_text
      color = black
      font = Times New Roman
      letterHeight = 0.025
      startVal [time (s)] = 0
      text = You just failed an attention check. Please pay full attention to the task.
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    KeyboardComponent missed_attention_check_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent missed_attention_check_press_space_to_continue
      color = black
      font = Times New Roman
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press SPACE to continue
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  Routine liking_trial_attention_check
    TextComponent liking_trial_attention_check_question
      color = black
      font = Times New Roman
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = This is an attention check. Press Q on your keyboard to continue
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    CodeComponent liking_trial_attention_check_code
      Code Type = Auto->JS
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      Begin Routine:
        #liking_trial_missed_attention_check_text.alignHoriz = "left"

        response_time = None

        this_check_failed = False
      Each Frame:
        # Check if a key was pressed and record time
        if liking_trial_attention_check_choice.keys and response_time is None:
            response_time = t  # `t` is the current time in the routine

        # Check if 1 second has passed since response
        if liking_trial_attention_check_choice.keys:
            #if liking_trial_attention_check_choice.keys[0] == "q":
            if response_time is not None and t - response_time >= 1:
                continueRoutine = False
      End Routine:
        #Data logging

        thisExp.addData("Left Image", liking_attention_random_choice)
        thisExp.addData("Right Image", liking_attention_random_choice)
        thisExp.addData("Trial Type", "attention-check")

        #if abort == False:
        if liking_trial_attention_check_choice.keys:
            if liking_trial_attention_check_choice.keys[0] != "q" or len(liking_trial_attention_check_choice.keys) < 1:
                attention_checks_failed += 1
                this_check_failed = True

        elif not liking_trial_attention_check_choice.keys:
            attention_checks_failed += 1
            this_check_failed = True

        thisExp.addData("checks failed", attention_checks_failed)
        thisExp.addData("this check failed", this_check_failed)
    ImageComponent liking_trial_attention_check_left_image
      image [set every repeat] = $liking_attention_check_image
      pos = left_image_position
      size = image_size
      startVal [time (s)] = 0.25
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    ImageComponent liking_trial_attention_check_right_image
      image [set every repeat] = $liking_attention_check_image
      pos = right_image_position
      size = image_size
      startVal [time (s)] = 0.25
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    KeyboardComponent liking_trial_attention_check_choice
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      store = all keys
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    TextComponent liking_trial_attention_check_steak_A
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (-0.25, 0.2)
      startVal [time (s)] = 0
      text = PLANT-BASED STEAK A
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    TextComponent liking_trial_attention_check_steak_B
      color = black
      font = Times New Roman
      letterHeight = 0.03
      pos = (0.25, 0.2)
      startVal [time (s)] = 0
      text = PLANT-BASED STEAK B
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Flow
  Routine routine_0_experiment_conditions
  Routine routine_0_experiment_info
  Routine routine_1_informed_consent
  Routine diet_question
  Routine additional_diet_question
  Routine red_meat_question
  Routine routine_3_pre_instructions
  Routine routine_4_practice_instructions
  LoopInitiator trials_practice loopType="TrialHandler"
    loopType = random
    nReps = length_of_practice_trials
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    Routine practice_trial
  LoopTerminator trials_practice
  Routine practice_trial_attention_check
  Routine failed_attention_check
  Routine routine_4_practice_aftermath
  LoopInitiator trials_liking_instructions loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine routine_6_liking_instructions
  LoopTerminator trials_liking_instructions
  LoopInitiator trials_liking loopType="TrialHandler"
    loopType = random
    nReps = length_of_experimental_trials
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    Routine liking_trial
  LoopTerminator trials_liking
  Routine liking_trial_attention_check
  Routine failed_attention_check
  LoopInitiator trials_similarity_instructions loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine routine_6_similarity_instructions
  LoopTerminator trials_similarity_instructions
  LoopInitiator trials_similarity loopType="TrialHandler"
    loopType = random
    nReps = length_of_experimental_trials
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    Routine similarity_trial
  LoopTerminator trials_similarity
  Routine age_question
  Routine gender_question
  Routine frequency_question
  Routine feedback_question
  Routine end
